[[model]]
name: grandi-2010
version: 20230208
mmt_authors: Michael Clerx
desc: """
    The 2010 model of the human ventricular AP by Grandi et al. [1].

    This implementation is based on the CellML version [2] and the original
    matlab code [3]. It was checked against the original code numerically
    by comparing the calculated derivatives.

    The stimulus was set to 1ms at -40 [A/F] and the model was paced towards a
    state state at 1Hz.

    [1] Grandi, E., Pasqualini, F. S., & Bers, D. M. (2010). A novel
        computational model of the human ventricular action potential and Ca
        transient. Journal of Molecular and Cellular Cardiology, 48, 112-121.
        https://doi.org/10.1016/j.yjmcc.2009.09.019

    [2] https://models.physiomeproject.org/e/96

    [3] https://github.com/drgrandilab/Grandi-et-al-2010-Human-Ventricular-Model
        Accessed on 2023-02-08

    """
# Initial values
membrane.V    = -8.13680367593923677e+01
ina.m         =  3.86241103396859362e-03
ina.h         =  6.23130611464227768e-01
ina.j         =  6.19354010865315496e-01
ical.d        =  2.96686821946442471e-06
ical.f        =  9.95081077775914702e-01
ical.fCa_jn   =  2.48732085911295558e-02
ical.fCa_sl   =  1.54545348647575197e-02
ito.xs        =  4.43419780420447468e-04
ito.ys        =  7.59884719006788889e-01
ito.xf        =  4.43406730074843221e-04
ito.yf        =  9.99995770682869156e-01
ikr.x         =  3.12987420951137060e-02
iks.x         =  4.30635539936340909e-03
ryr.r         =  8.86128726739137007e-01
ryr.o         =  7.56504941711903883e-07
ryr.i         =  9.72138883258486417e-08
nabss.NaB_jn  =  3.40580312188899903e+00
nabss.NaB_sl  =  7.43103445543048191e-01
cabct.TnCL    =  9.16504376397858297e-03
cabct.TnCHCa  =  1.18645658323920433e-01
cabct.TnCHMg  =  1.00275818283069740e-02
cabct.CaM     =  3.03396098470814883e-04
cabct.MyoCa   =  2.05528910473128925e-03
cabct.MyoMg   =  1.37426393543543163e-01
cabct.SRB     =  2.22544108603688799e-03
cabss.SLL_jn  =  7.43148132934022369e-03
cabss.SLL_sl  =  9.92696172812641657e-03
cabss.SLH_jn  =  7.37769966359162199e-02
cabss.SLH_sl  =  1.14920173827026267e-01
cabsr.Csqn    =  1.20654834729663940e+00
cabsr.Ca_sr   =  5.62815824262954290e-01
sodium.Na_jn  =  8.19206443132303619e+00
sodium.Na_sl  =  8.19109031004906996e+00
sodium.Na_i   =  8.19126235367467181e+00
calcium.Ca_jn =  1.76511108291107707e-04
calcium.Ca_sl =  1.07030808372472771e-04
calcium.Ca_i  =  8.95697673709018165e-05

#
# Simulation
#
[engine]
time = 0 [ms]
    in [ms]
    bind time
pace = 0
    bind pace

#
# Cell type
#
[mode]
epi = 1
    desc: 1 For epicardial cell, 0 for endocardial cell

#
# Membrane potential
#
# Supplement 1.17, page 10
#
[membrane]
use stimulus.i_stim, potassium.I_K_tot
dot(V) = -(i_ion + i_stim)
    in [mV]
    label membrane_potential
I_Na_tot = sodium.I_Na_tot_jn + sodium.I_Na_tot_sl
    in [A/F]
I_Ca_tot = calcium.I_Ca_tot_jn + calcium.I_Ca_tot_sl
    in [A/F]
I_Cl_tot = iclca.IClCa + iclb.IClB
    in [A/F]
i_ion = I_Na_tot + I_Cl_tot + I_Ca_tot + I_K_tot
    in [A/F]
    label cellular_current

#
# Stimulus current
#
[stimulus]
i_stim = engine.pace * amplitude
    in [A/F]
amplitude = -40 [A/F]
    in [A/F]


#
# Physical constants
#
# Supplement 2.1, page 12
#
[phys]
F = 96485 [C/mol]
    in [C/mol]
R = 8314 [mJ/mol/K]
    in [mJ/mol/K]
T = 310 [K]
    in [K]
RTF = R * T / F
    in [mV]
FRT = F / R / T
    in [1/mV]
Q = (T - 310 [K]) / 10 [K]

#
# Cell geometry
#
# Supplement 2.2, page 12
#
[cell]
C = 1.381e-10 [F]
    in [F]
L = 100 [um]
    in [um]
R = 10.25 [um]
    in [um]
pi = 3.14159265358979312
Vcell = pi * R^2 * L * 1e-15 [L/um^3]
    in [L]
Vmyo = 0.65 * Vcell
    in [L]
Vsr = 0.035 * Vcell
    in [L]
Vsl = 0.02 * Vcell
    in [L]
Vjn = 0.0539 * 0.01 * Vcell
    in [L]
fjn = 0.11
    desc: Fraction of currents in junctional compartment
fsl = 1 - fjn
    desc: Fraction of currents in subsarcolemmal compartment
fjn_CaL = 0.9
    desc: Fraction of ICaL in junctional compartment
fsl_CaL = 1 - fjn_CaL
    desc: Fraction of ICaL in subsarcolemmal compartment

#
# Fixed ion concentrations
#
# Supplement 2.4, page 12
#
[ion]
Na_o = 140 [mM]
    desc: Extracellular Na
    in [mM]
K_o = 5.4 [mM]
    desc: Extracellular K
    in [mM]
K_i = 120 [mM]
    desc: Intracellular K
    in [mM]
Ca_o = 1.8 [mM]
    desc: Extracellular Ca
    in [mM]
Cl_i = 15 [mM]
    desc: Intracellular Cl
    in [mM]
Cl_o = 150 [mM]
    desc: Extracellular Cl
    in [mM]
Mg_i = 1 [mM]
    desc: Intracellular Mg
    in [mM]

#
# Reversal potentials
#
# Supplement 1.18, page 11
#
[rev]
use phys.RTF
ENa_jn = RTF * log(ion.Na_o / sodium.Na_jn)
    in [mV]
ENa_sl = RTF * log(ion.Na_o / sodium.Na_sl)
    in [mV]
ECa_jn = 0.5 * RTF * log(ion.Ca_o / calcium.Ca_jn)
    in [mV]
ECa_sl = 0.5 * RTF * log(ion.Ca_o / calcium.Ca_sl)
    in [mV]
ECl = RTF * log(ion.Cl_i / ion.Cl_o)
    in [mV]
EK = RTF * log(ion.K_o / ion.K_i)
    in [mV]
EKs = RTF * log((ion.K_o + pNaK * ion.Na_o) / (ion.K_i + pNaK * sodium.Na_i))
    in [mV]
pNaK = 0.01833

#
# Fast sodium current
#
# Supplement 1.1, page 2
#
[ina]
use membrane.V
INa = INa_jn + INa_sl
    in [A/F]
INa_jn = cell.fjn * gNa * m^3 * h * j * (V - rev.ENa_jn)
    in [A/F]
INa_sl = cell.fsl * gNa * m^3 * h * j * (V - rev.ENa_sl)
    in [A/F]
gNa = 23 [mS/uF]
    in [mS/uF]
dot(m) = (inf - m) / tau
    inf = 1 / (1 + exp(-(56.86 [mV] + V) / 9.03 [mV]))^2
    tau = 0.1292 [ms] * exp(-((V + 45.79 [mV]) / 15.54 [mV])^2) + 0.06487 [ms] * exp(-((V - 4.823 [mV]) / 51.12 [mV])^2)
        in [ms]
dot(h) = (inf - h) / tau
    a = if(V >= -40 [mV], 0 [1/ms],
            0.057 [1/ms] * exp(-(V + 80 [mV]) / 6.8 [mV]))
        in [1/ms]
    b = if(V >= -40 [mV],
            0.77 [1/ms] / (0.13 * (1 + exp(-(V + 10.66 [mV]) / 11.1 [mV]))),
            2.7 [1/ms] * exp(0.079 [1/mV] * V) + 3.1e5 [1/ms] * exp(0.3485 [1/mV] * V))
        in [1/ms]
    tau = 1 / (a + b)
        in [ms]
    inf = 1 / (1 + exp((V + 71.55 [mV]) / 7.43 [mV]))^2
dot(j) = (inf - j) / tau
    a = if(V >= -40 [mV], 0 [1/ms], (
                (-2.5428e4 [1/mV/ms] * exp(0.2444 [1/mV] * V) - 6.948e-6 [1/mV/ms] * exp(-0.04391 [1/mV] * V))
                * (V + 37.78 [mV]) / (1 + exp(0.311 [1/mV] * (V + 79.23 [mV])))
            ))
        in [1/ms]
    b = if(V >= -40 [mV],
            0.6 [1/ms] * exp(0.057 [1/mV] * V) / (1 + exp(-0.1 [1/mV] * (V + 32 [mV]))),
            0.02424 [1/ms] * exp(-0.01052 [1/mV] * V) / (1 + exp(-0.1378 [1/mV] * (V + 40.14 [mV]))))
        in [1/ms]
    tau = 1 / (a + b)
        in [ms]
    inf = 1 / (1 + exp((V + 71.55 [mV]) / 7.43 [mV]))^2

#
# Background sodium current
#
# Supplement 1.2, page 3
#
[inab]
use membrane.V
INaB = INaB_jn + INaB_sl
    in [A/F]
INaB_jn = cell.fjn * gNaB * (V - rev.ENa_jn)
    in [A/F]
INaB_sl = cell.fsl * gNaB * (V - rev.ENa_sl)
    in [A/F]
gNaB = 0.597e-3 [mS/uF]
    in [mS/uF]

#
# Na/K pump current
#
# Supplement 1.3, page 3
#
[inak]
use membrane.V, phys.FRT
use ion.K_o, sodium.Na_jn, sodium.Na_sl
INaK = INaK_jn + INaK_sl
    in [A/F]
INaK_jn = cell.fjn * IbarNaK * fnak * K_o / (1 + (KmNaip / Na_jn)^4) / (K_o + KmKo)
    in [A/F]
INaK_sl = cell.fsl * IbarNaK * fnak * K_o / (1 + (KmNaip / Na_sl)^4) / (K_o + KmKo)
    in [A/F]
IbarNaK = 1.8 [A/F]
    in [A/F]
fnak = 1 / (1 + 0.1245 * exp(-0.1 * V * FRT) + 0.0365 * sigma * exp(-V * FRT))
    sigma = (exp(ion.Na_o / 67.3 [mM]) - 1) / 7
KmKo = 1.5 [mM]
    in [mM]
KmNaip = 11 [mM]
    in [mM]

#
# Rapidly activating potassium current
#
# Supplement 1.4, page 3
#
[ikr]
use membrane.V
IKr = gKr * x * r * (V - rev.EK)
    in [A/F]
gKr = 0.035 [mS/uF] * sqrt(ion.K_o / 5.4 [mM])
    in [mS/uF]
dot(x) = (inf - x) / tau
    inf = 1 / (1 + exp(-(V + 10 [mV]) / 5 [mV]))
    tau = (+ 550 [ms] / (1 + exp((-22 [mV] - V) / 9 [mV])) * 6 / (1 + exp((V + 11 [mV]) / 9 [mV]))
           + 230 [ms] / (1 + exp((V + 40 [mV]) / 20 [mV])))
        in [ms]
r = 1 / (1 + exp((V + 74 [mV]) / 24 [mV]))

#
# Slowly activating potassium current
#
# Supplement 1.5, page 4
#
[iks]
use membrane.V
IKs = IKs_jn + IKs_sl
    in [A/F]
IKs_jn = cell.fjn * gKs * x^2 * (V - rev.EKs)
    in [A/F]
IKs_sl = cell.fsl * gKs * x^2 * (V - rev.EKs)
    in [A/F]
gKs = 0.0035 [mS/uF]
    in [mS/uF]
dot(x) = (inf - x) / tau
    inf = 1 / (1 + exp(-(V + 3.8 [mV]) / 14.25 [mV]))
    tau = 990.1 [ms] / (1 + exp(-(V + 2.436 [mV]) / 14.12 [mV]))
        in [ms]

#
# Plateau potassium current
#
# Supplement 1.6, page 4
#
[ikp]
use membrane.V
IKp = IKp_jn + IKp_sl
    in [A/F]
IKp_jn = cell.fjn * gKp * kp * (V - rev.EK)
    in [A/F]
IKp_sl = cell.fsl * gKp * kp * (V - rev.EK)
    in [A/F]
gKp = 0.002 [mS/uF]
    in [mS/uF]
kp = 1 / (1 + exp(7.488 - V / 5.98 [mV]))

#
# Transient outward potassium current (fast and slow components)
#
# Supplement 1.7, page 4
#
[ito]
use membrane.V
Ito = Itos + Itof
    in [A/F]
Itof = gtof * xf * yf * (V - rev.EK)
    in [A/F]
Itos = gtos * xs * ys * (V - rev.EK)
    in [A/F]
gtof = 0.13 [mS/uF] * if(mode.epi == 1, 0.88, 0.3 * 0.036)
    in [mS/uF]
gtos = 0.13 [mS/uF] * if(mode.epi == 1, 0.12, 0.3 * 0.964)
    in [mS/uF]
x_inf = 1 / (1 + exp((V - 19 [mV]) / -13 [mV]))
y_inf = 1 / (1 + exp((V + 19.5 [mV]) / 5 [mV]))
dot(xf) = (x_inf - xf) / tau
    tau = 8.5 [ms] * exp(-((V + 45 [mV]) / 50 [mV])^2) + 0.5 [ms]
        in [ms]
dot(xs) = (x_inf - xs) / tau
    tau = 9 [ms] / (1 + exp((V + 3 [mV]) / 15 [mV])) + 0.5 [ms]
        in [ms]
dot(yf) = (y_inf - yf) / tau
    tau = 85 [ms] * exp(-(V + 40 [mV])^2 / 220 [mV^2]) + 7 [ms]
        in [ms]
dot(ys) = (y_inf - ys) / tau
    tau = 800 [ms] / (1 + exp((V + 60 [mV]) / 10 [mV])) + 30 [ms]
        in [ms]

#
# Inward recitifer potassium current
#
# Supplement 1.8, page 5
#
[ik1]
use membrane.V, rev.EK
IK1 = gK1 * inf * (V - EK)
    in [A/F]
gK1 = sqrt(ion.K_o / 5.4 [mM]) * gK1_base
    in [mS/uF]
gK1_base = 0.35 [mS/uF]
    in [mS/uF]
inf = a / (a + b)
    a = 1.02 / (1 + exp(0.2385 [1/mV] * (V - EK - 59.215 [mV])))
    b = (0.49124 * exp(0.08032 [1/mV] * (V - EK + 5.476 [mV]))
         + exp(0.06175 [1/mV] * (V - EK - 594.31 [mV]))
        ) / (1 + exp(-0.5143 [1/mV] * (V - EK + 4.753 [mV])))

#
# Calcium activated Chloride current
#
# Supplement 1.9, page 5
#
[iclca]
use membrane.V
IClCa = IClCa_jn + IClCa_sl
    in [A/F]
IClCa_jn = cell.fjn * gClCa / (1 + KdClCa / calcium.Ca_jn) * (V - rev.ECl)
    in [A/F]
IClCa_sl = cell.fsl * gClCa / (1 + KdClCa / calcium.Ca_sl) * (V - rev.ECl)
    in [A/F]
gClCa = 0.5 * 0.109625 [mS/uF]
    in [mS/uF]
KdClCa = 0.1 [mM]
    in [mM]

#
# Background chloride current
#
# Supplement 1.10, page 5
#
[iclb]
IClB = gClB * (membrane.V - rev.ECl)
    in [A/F]
gClB = 9e-3 [mS/uF]
    in [mS/uF]

#
# L-type calcium current
#
# Supplement 1.11, page 6
#
[ical]
use membrane.V
use phys.F, phys.FRT
use calcium.Ca_jn, calcium.Ca_sl, ion.Ca_o
use sodium.Na_jn, sodium.Na_sl, ion.Na_o
use ion.K_i, ion.K_o
use cell.fjn_CaL, cell.fsl_CaL
ICaL = ICaL_Ca + ICaL_Na + ICaL_K
    in [A/F]
    label ICaL
ICaL_Ca = ICaL_Ca_jn + ICaL_Ca_sl
    in [A/F]
ICaL_Ca_jn = fjn_CaL * ibarca_jn * d * f * (1 - fCa_jn) * Q
    in [A/F]
ICaL_Ca_sl = fsl_CaL * ibarca_sl * d * f * (1 - fCa_sl) * Q
    in [A/F]
ICaL_Na = ICaL_Na_jn + ICaL_Na_sl
    in [A/F]
ICaL_Na_jn = fjn_CaL * ibarna_jn * d * f * (1 - fCa_jn) * Q
    in [A/F]
ICaL_Na_sl = fsl_CaL * ibarna_sl * d * f * (1 - fCa_sl) * Q
    in [A/F]
ICaL_K = ibark * d * f * (fjn_CaL * (1 - fCa_jn) + cell.fsl_CaL * (1 - fCa_sl)) * Q
    in [A/F]
# Permeability
scale = 1
    label gCaL
PCa = scale * 2.7e-4 [L/F/ms]
    in [L/F/ms]
PNa = scale * 0.75e-8 [L/F/ms]
    in [L/F/ms]
PK = scale * 1.35e-7 [L/F/ms]
    in [L/F/ms]
Q10CaL = 1.8
Q = Q10CaL^phys.Q * 0.45
# Driving terms
ibarca_jn = PCa * 4 * V * F * FRT * (0.341 * Ca_jn * exp(2 * V * FRT) - 0.341 * Ca_o) / (exp(2 * V * FRT) - 1)
    in [A/F]
ibarca_sl = PCa * 4 * V * F * FRT * (0.341 * Ca_sl * exp(2 * V * FRT) - 0.341 * Ca_o) / (exp(2 * V * FRT) - 1)
    in [A/F]
ibarna_jn = PNa * V * F * FRT * (0.75 * Na_jn * exp(V * FRT) - 0.75 * Na_o) / (exp(V * FRT) - 1)
    in [A/F]
ibarna_sl = PNa * V * F * FRT * (0.75 * Na_sl * exp(V * FRT) - 0.75 * Na_o) / (exp(V * FRT) - 1)
    in [A/F]
ibark = PK * V * F * FRT * (0.75 * K_i * exp(V * FRT) - 0.75 * K_o) / (exp(V * FRT) - 1)
    in [A/F]
# Activation
dot(d) = (inf - d) / tau
    inf = 1 / (1 + exp(-(V + 5 [mV]) / 6 [mV]))
    tau = inf * (1 - exp(-(V + 5 [mV]) / 6 [mV])) / (0.035 [1/ms/mV] * (V + 5 [mV]))
        in [ms]
# Voltage-dependent inactivation
dot(f) = (inf - f) / tau
    inf = 1 / (1 + exp((V + 35 [mV]) / 9 [mV])) + 0.6 / (1 + exp((50 [mV] - V) / 20 [mV]))
    tau = 1 / (0.0197 [1/ms] * exp(-(0.0337 [1/mV] * (V + 14.5 [mV]))^2) + 0.02 [1/ms])
        in [ms]
# Calcium-dependent inactivation (gate = 1 minus these)
dot(fCa_jn) = 1.7 [1/mM/ms] * Ca_jn * (1 - fCa_jn) - 11.9e-3 [1/ms] * fCa_jn
dot(fCa_sl) = 1.7 [1/mM/ms] * Ca_sl * (1 - fCa_sl) - 11.9e-3 [1/ms] * fCa_sl

#
# Sodium/Calcium exchanger current
#
# Supplement 1.12, page 7
#
[inaca]
use membrane.V
use phys.FRT
use sodium.Na_jn, sodium.Na_sl, ion.Na_o
use calcium.Ca_jn, calcium.Ca_sl, ion.Ca_o
INaCa = INaCa_jn + INaCa_sl
    in [A/F]
INaCa_jn = cell.fjn * IbarNaCa * Q * Ka_jn * (s1 - s2) / s3 / (1 + ksat * exp((nu - 1) * V * FRT))
    in [A/F]
    s1 = exp(nu * V * FRT) * Na_jn^3 * Ca_o
        in [mM^4]
    s2 = exp((nu - 1) * V * FRT) * Na_o^3 * Ca_jn
        in [mM^4]
    s3 = KmCai * Na_o^3 * (1 + (Na_jn / KmNai)^3) + KmNao^3 * Ca_jn * (1 + Ca_jn / KmCai) + KmCao * Na_jn^3 + Na_jn^3 * Ca_o + Na_o^3 * Ca_jn
        in [mM^4]
    Ka_jn = 1 / (1 + (Kdact / Ca_jn)^2)
INaCa_sl = cell.fsl * IbarNaCa * Q * Ka * (s1 - s2) / s3 / (1 + ksat * exp((nu - 1) * V * FRT))
    in [A/F]
    s1 = exp(nu * V * FRT) * Na_sl^3 * Ca_o
        in [mM^4]
    s2 = exp((nu - 1) * V * FRT) * Na_o^3 * Ca_sl
        in [mM^4]
    s3 = KmCai * Na_o^3 * (1 + (Na_sl / KmNai)^3) + KmNao^3 * Ca_sl * (1 + Ca_sl / KmCai) + KmCao * Na_sl^3 + Na_sl^3 * Ca_o + Na_o^3 * Ca_sl
        in [mM^4]
    Ka = 1 / (1 + (Kdact / Ca_sl)^2)
IbarNaCa = 4.5 [A/F]
    in [A/F]
Q10NaCa = 1.57
Q = Q10NaCa^phys.Q
Kdact = 0.15e-3 [mM]
    in [mM]
KmNai = 12.29 [mM]
    in [mM]
KmNao = 87.5 [mM]
    in [mM]
KmCai = 0.00359 [mM]
    in [mM]
KmCao = 1.3 [mM]
    in [mM]
ksat = 0.32
nu = 0.27

#
# Sarcolemmal calcium pump current
#
# Supplement 1.13, page 8
#
[ipca]
use calcium.Ca_jn, calcium.Ca_sl
IpCa = IpCa_jn + IpCa_sl
    in [A/F]
IpCa_jn = cell.fjn * Q * IbarSLCaP * a / (a + b)
    in [A/F]
    a = (calcium.Ca_jn / 1 [mM])^1.6
IpCa_sl = cell.fsl * Q * IbarSLCaP * a / (a + b)
    in [A/F]
    a = (calcium.Ca_sl / 1 [mM])^1.6
b = (KmPCa / 1 [mM])^1.6
KmPCa = 0.0005 [mM]
    in [mM]
IbarSLCaP = 0.0673 [A/F]
    in [A/F]
Q10 = 2.35
Q = Q10^phys.Q

#
# Background calcium current
#
# Supplement 1.14, page 8
#
[icab]
use membrane.V
ICaB = ICaB_jn + ICaB_sl
    in [A/F]
ICaB_jn = cell.fjn * gCaB * (V - rev.ECa_jn)
    in [A/F]
ICaB_sl = cell.fsl * gCaB * (V - rev.ECa_sl)
    in [A/F]
gCaB = 5.513e-4 [mS/uF]
    in [mS/uF]


#
# SR calcium release
#
# Supplement 1.15, page 8
#
[ryr]
use calcium.Ca_jn, cabsr.Ca_sr
J_SRCarel = ks * o * (Ca_sr - Ca_jn)
    in [mM/ms]
ks = 25 [1/ms]
    in [1/ms]
kom = 0.06 [1/ms]
    in [1/ms]
kim = 0.005 [1/ms]
    in [1/ms]
kiCa = 0.5 [1/mM/ms]
    in [1/mM/ms]
koCa = 10 [1/mM^2/ms]
    in [1/mM^2/ms]
ec50SR = 0.45 [mM]
    in [mM]
MaxSR = 15
MinSR = 1
kCaSR = MaxSR - (MaxSR - MinSR) / (1 + (ec50SR / Ca_sr)^2.5)
koSRCa = koCa / kCaSR
    in [1/mM^2/ms]
kiSRCa = kiCa * kCaSR
    in [1/mM/ms]
dot(r) = (kim * ri - kiSRCa * Ca_jn * r) - (koSRCa * Ca_jn^2 * r - kom * o)
dot(o) = (koSRCa * Ca_jn^2 * r - kom * o) - (kiSRCa * Ca_jn * o - kim * i)
dot(i) = (kiSRCa * Ca_jn * o - kim * i) - (kom * i - koSRCa * Ca_jn^2 * ri)
ri = 1 - r - o - i

#
# SR calcium pump
#
# Supplement 1.15, page 8
#
[serca]
use calcium.Ca_i, cabsr.Ca_sr
J_serca = Q * Vmax * ((Ca_i / Kmf)^h - (Ca_sr / Kmr)^h) / (1 + (Ca_i / Kmf)^h + (Ca_sr / Kmr)^h)
    in [mM/ms]
Vmax = 5.3114e-3 [mM/ms]
    in [mM/ms]
Kmr = 1.7 [mM]
    in [mM]
Kmf = 0.246e-3 [mM]
    in [mM]
h = 1.787
Q = Q10^phys.Q
Q10 = 2.6

#
# SR calcium leak
#
# Supplement 1.15, page 8
#
[caleak]
use cabsr.Ca_sr, calcium.Ca_jn
J_SRleak = (Ca_sr - Ca_jn) * 5.348e-6 [1/ms]
    in [mM/ms]

#
# Sodium buffering
#
# Supplement 1.16.1, page 9
#
[nabss]
Bmax_Na_jn = 7.561 [mM]
    in [mM]
Bmax_Na_sl = 1.65 [mM]
    in [mM]
koff_na = 1e-3 [1/ms]
    in [1/ms]
kon_na = 1e-4 [1/mM/ms]
    in [1/mM/ms]
dot(NaB_jn) = kon_na * sodium.Na_jn * (Bmax_Na_jn - NaB_jn) - koff_na * NaB_jn
    in [mM]
dot(NaB_sl) = kon_na * sodium.Na_sl * (Bmax_Na_sl - NaB_sl) - koff_na * NaB_sl
    in [mM]

#
# Cytosolic calcium buffering
#
# Supplement 1.16.2, page 9
#
[cabct]
use cell.Vmyo, cell.Vjn, cell.Vsl
use calcium.Ca_i, calcium.Ca_jn, calcium.Ca_sl
use cabss.J_CaB_jn, cabss.J_CaB_sl
use ion.Mg_i
J_CaB_cytosol = dot(TnCL) + dot(TnCHCa) + dot(TnCHMg) + dot(CaM) + dot(MyoCa) + dot(MyoMg) + dot(SRB)
    in [mM/ms]
# TnCl
Bmax_TnClow = 0.07 [mM]
    in [mM]
koff_tncl = 19.6e-3 [1/ms]
    in [1/ms]
kon_tncl = 32.7 [1/mM/ms]
    in [1/mM/ms]
Bmax_TnChigh = 140e-3 [mM]
    in [mM]
koff_tnchCa = 0.032e-3 [1/ms]
    in [1/ms]
kon_tnchCa = 2.37 [1/mM/ms]
    in [1/mM/ms]
koff_tnchMg = 3.33e-3 [1/ms]
    in [1/ms]
kon_tnchMg = 3e-3 [1/mM/ms]
    in [1/mM/ms]
dot(TnCL) = kon_tncl * Ca_i * (Bmax_TnClow - TnCL) - koff_tncl * TnCL
    in [mM]
dot(TnCHCa) = kon_tnchCa * Ca_i * (Bmax_TnChigh - TnCHCa - TnCHMg) - koff_tnchCa * TnCHCa
    in [mM]
dot(TnCHMg) = kon_tnchMg * Mg_i * (Bmax_TnChigh - TnCHCa - TnCHMg) - koff_tnchMg * TnCHMg
    in [mM]
# Calmodulin
Bmax_CaM = 24e-3 [mM]
    in [mM]
koff_cam = 238e-3 [1/ms]
    in [1/ms]
kon_cam = 34 [1/mM/ms]
    in [1/mM/ms]
dot(CaM) = kon_cam * Ca_i * (Bmax_CaM - CaM) - koff_cam * CaM
    in [mM]
# Myosin-Ca and Myosin-Mg
Bmax_myosin = 140e-3 [mM]
    in [mM]
koff_myoCa = 0.46e-3 [1/ms]
    in [1/ms]
kon_myoCa = 13.8 [1/mM/ms]
    in [1/mM/ms]
koff_myoMg = 0.057e-3 [1/ms]
    in [1/ms]
kon_myoMg = 0.0157 [1/mM/ms]
    in [1/mM/ms]
dot(MyoCa) = kon_myoCa * Ca_i * (Bmax_myosin - MyoCa - MyoMg) - koff_myoCa * MyoCa
    in [mM]
dot(MyoMg) = kon_myoMg * Mg_i * (Bmax_myosin - MyoCa - MyoMg) - koff_myoMg * MyoMg
    in [mM]
# SRB
Bmax_SR = 19 * 0.9e-3 [mM]
    in [mM]
koff_sr = 60e-3 [1/ms]
    in [1/ms]
kon_sr = 100 [1/mM/ms]
    in [1/mM/ms]
dot(SRB) = kon_sr * Ca_i * (Bmax_SR - SRB) - koff_sr * SRB
    in [mM]

#
# Junctional and SL calcium buffers
#
# Supplement 1.16.3, page 9
#
[cabss]
use calcium.Ca_sl, calcium.Ca_jn
use cell.Vmyo, cell.Vsl, cell.Vjn
use cabct.J_CaB_cytosol
J_CaB_jn = dot(SLL_jn) + dot(SLH_jn)
    in [mM/ms]
J_CaB_sl = dot(SLL_sl) + dot(SLH_sl)
    in [mM/ms]
Bmax_SLlowjn = 4.6e-3 [mM] * Vmyo / Vjn * 0.1
    in [mM]
Bmax_SLlowsl = 37.4e-3 [mM] * Vmyo / Vsl
    in [mM]
Bmax_SLhighjn = 1.65e-3 [mM] * Vmyo / Vjn * 0.1
    in [mM]
Bmax_SLhighsl = 13.4e-3 [mM] * Vmyo / Vsl
    in [mM]
koff_sll = 1.3 [1/ms]
    in [1/ms]
kon_sll = 100 [1/mM/ms]
    in [1/mM/ms]
koff_slh = 0.03 [1/ms]
    in [1/ms]
kon_slh = 100 [1/mM/ms]
    in [1/mM/ms]
dot(SLL_jn) = kon_sll * Ca_jn * (Bmax_SLlowjn - SLL_jn) - koff_sll * SLL_jn
    in [mM]
dot(SLL_sl) = kon_sll * Ca_sl * (Bmax_SLlowsl - SLL_sl) - koff_sll * SLL_sl
    in [mM]
dot(SLH_jn) = kon_slh * Ca_jn * (Bmax_SLhighjn - SLH_jn) - koff_slh * SLH_jn
    in [mM]
dot(SLH_sl) = kon_slh * Ca_sl * (Bmax_SLhighsl - SLH_sl) - koff_slh * SLH_sl
    in [mM]

#
# SR calcium buffer
#
# Supplement 1.16.4, page 9
#
[cabsr]
use cell.Vmyo, cell.Vsr
koff_csqn = 65 [1/ms]
    in [1/ms]
kon_csqn = 100 [1/mM/ms]
    in [1/mM/ms]
Bmax_Csqn = 0.14 [mM] * Vmyo / Vsr
    in [mM]
dot(Csqn) = kon_csqn * Ca_sr * (Bmax_Csqn - Csqn) - koff_csqn * Csqn
    in [mM]
dot(Ca_sr) = serca.J_serca - (caleak.J_SRleak * Vmyo / Vsr + ryr.J_SRCarel) - dot(Csqn)
    in [mM]

#
# Sodium concentrations
#
# Supplement 1.16.5, page 10
#
[sodium]
use cell.C, phys.F
use cell.Vjn, cell.Vsl, cell.Vmyo
# Note: J_Na_jnsl and J_Na_slmyo have the values from the code here, not from
# the CellML
J_Na_jnsl = 1 [L] / (1.6382e12 [ms] / 3 * 100)
    in [L/ms]
J_Na_slmyo = 1 [L] / (1.8308e10 [ms] / 3 * 100)
    in [L/ms]
I_Na_tot_jn = ina.INa_jn + inab.INaB_jn + 3 * inaca.INaCa_jn + 3 * inak.INaK_jn + ical.ICaL_Na_jn
    in [A/F]
I_Na_tot_sl = ina.INa_sl + inab.INaB_sl + 3 * inaca.INaCa_sl + 3 * inak.INaK_sl + ical.ICaL_Na_sl
    in [A/F]
dot(Na_jn) = -I_Na_tot_jn * C / (Vjn * F) + J_Na_jnsl / Vjn * (Na_sl - Na_jn) - dot(nabss.NaB_jn)
    in [mM]
dot(Na_sl) = -I_Na_tot_sl * C / (Vsl * F) + J_Na_jnsl / Vsl * (Na_jn - Na_sl) + J_Na_slmyo / Vsl * (Na_i - Na_sl) - dot(nabss.NaB_sl)
    in [mM]
dot(Na_i) = J_Na_slmyo / Vmyo * (Na_sl - Na_i)
    in [mM]

#
# Potassium concentration
#
# Supplement 1.16.6, page 10
#
[potassium]
I_K_tot = ito.Ito + ikr.IKr + iks.IKs + ik1.IK1 - 2 * inak.INaK + ical.ICaL_K + ikp.IKp
    in [A/F]

#
# Calcium concentrations
#
# Supplement 1.16.7, page 10
#
[calcium]
use cell.C, phys.F
use cell.Vjn, cell.Vsr, cell.Vsl, cell.Vmyo
use serca.J_serca, ryr.J_SRCarel, caleak.J_SRleak
use cabct.J_CaB_cytosol, cabss.J_CaB_jn, cabss.J_CaB_sl
# Note: J_Ca_jsnl and J_Ca_slmyo have the values from the code here, not those
# from the CellML files.
J_Ca_jnsl = 1 [L] / 1.2134e12 [ms]
    in [L/ms]
J_Ca_slmyo = 1 [L] / 2.68510e11 [ms]
    in [L/ms]
I_Ca_tot_jn = ical.ICaL_Ca_jn + icab.ICaB_jn + ipca.IpCa_jn - 2 * inaca.INaCa_jn
    in [A/F]
I_Ca_tot_sl = ical.ICaL_Ca_sl + icab.ICaB_sl + ipca.IpCa_sl - 2 * inaca.INaCa_sl
    in [A/F]
dot(Ca_i) = -J_serca * Vsr / Vmyo - J_CaB_cytosol + J_Ca_slmyo / Vmyo * (Ca_sl - Ca_i)
    in [mM]
dot(Ca_jn) = -I_Ca_tot_jn * C / (Vjn * 2 * F) + J_Ca_jnsl / Vjn * (Ca_sl - Ca_jn) - J_CaB_jn + J_SRCarel * Vsr / Vjn + J_SRleak * Vmyo / Vjn
    in [mM]
dot(Ca_sl) = -I_Ca_tot_sl * C / (Vsl * 2 * F) + J_Ca_jnsl / Vsl * (Ca_jn - Ca_sl) + J_Ca_slmyo / Vsl * (Ca_i - Ca_sl) - J_CaB_sl
    in [mM]

[[protocol]]
# Level  Start    Length   Period   Multiplier
1        100      1        1000     0

[[script]]
import matplotlib.pyplot as plt
import myokit

# Get model and protocol, create simulation
m = get_model()
p = get_protocol()
s = myokit.Simulation(m, p)

# Run simulation
d = s.run(1000)

# Display the results
plt.figure()
plt.plot(d['engine.time'], d['membrane.V'])
plt.show()

