[[model]]
name: ohara-2011
version: 20240624
mmt_authors: Michael Clerx
display_name: O'Hara et al., 2011
desc: """
    The 2011 model for the undiseased human ventricular AP and calcium
    transient by O'Hara et al. [1].

    The model builds on several other models, including [2]. 

    This implementation is based on the original Matlab code provided by the
    authors. It was checked against the original code by comparing the
    calculated derivatives. After this, two small changes to the INaK 
    formulation were made (see below).

    Comments and errata on [1]:
    
    1. The comment "Publisher's Note: Errors in Text S1" describes three issues
       in the supplement text, which are not present in the published model
       code. Similarly, "Publisher's Note: Error in Figure 1, panel C, 5th 
       subplot" and "Publisher's Note: Rate dependent APD curves for TP model
       were arranged incorrectly in Figure 18A" describe issues in the figures.
       No changes to the Myokit model were made based on these comments.
    2. The comment "A Note About the Fast Na Current (I~~Na~~) Formulation"
       explains issues with using the O'Hara model for tissue simulations, and
       suggests a replacement of the INa formulation for this purpose. No
       changes to the Myokit model were made based on this comment.
    4. The comment "Ko and liquid junction potential" describes what could be a
       model issue (no LJP correction), but gives no solution, and so no
       changes to the Myokit model were made based on this note.
    5. The comment "Two minor issues in the INaK model implementation"
       describes two errors in the INaK equations, which do not significantly
       affect model output under baseline conditions. Both are corrected in
       this Myokit model.
    
    Where possible, the page of the supplement to [1] that describes each 
    component has been indicated.
    
    References:

    [1] O'Hara, T., Virág, L., Varró, A., & Rudy, Y. (2011). Simulation of the
        Undiseased Human Cardiac Ventricular Action Potential: Model
        Formulation and Experimental Validation. PLOS Computational Biology,
        7(5), e1002061.
        https://doi.org/10.1371/journal.pcbi.1002061

    [2] Hund, T. J., & Rudy, Y. (2004). Rate dependence and regulation of
        action potential and calcium transient in a canine cardiac ventricular
        cell model. Circulation, 110(20), 3168-3174.
        https://doi.org/10.1161/01.cir.0000147231.69595.d3

    """
# Initial values
membrane.V        = -87
sodium.Na_i       = 7
sodium.Na_ss      = 7
potassium.K_i     = 145
potassium.K_ss    = 145
calcium.Ca_i      = 1e-4
calcium.Ca_ss     = 1e-4
calcium.Ca_nsr    = 1.2
calcium.Ca_jsr    = 1.2
ina.m             = 0
ina.hf            = 1
ina.hs            = 1
ina.j             = 1
ina.hsp           = 1
ina.jp            = 1
inal.m            = 0
inal.h            = 1
inal.hp           = 1
ito.a             = 0
ito.if            = 1
ito.is            = 1
ito.ap            = 0
ito.ifp           = 1
ito.isp           = 1
ical.d            = 0
ical.ff           = 1
ical.fs           = 1
ical.fcaf         = 1
ical.fcas         = 1
ical.jca          = 1
ical.nca          = 0
ical.ffp          = 1
ical.fcafp        = 1
ikr.xf            = 0
ikr.xs            = 0
iks.x1            = 0
iks.x2            = 0
ik1.x             = 1
ryr.Jrelnp        = 0
ryr.Jrelp         = 0
camk.CaMK_trapped = 0

#
# Simulator variables
#
[engine]
time = 0 [ms]
    in [ms]
    bind time
pace = 0 bind pace

#
# Membrane potential
# Page 5
#
[membrane]
dot(V) = -(i_ion + stimulus.i_stim)
    label membrane_potential
    in [mV]
i_ion = (
        + sodium.INa_tot
        + sodium.INa_ss_tot
        + calcium.ICa_tot
        + calcium.ICa_ss_tot
        + potassium.IK_tot
        + potassium.IK_ss_tot
        )
    label cellular_current
    in [A/F]

#
# Stimulus current
# Page 5
#
[stimulus]
i_stim = engine.pace * amplitude
    in [A/F]
amplitude = -80 [A/F]
    in [A/F]

#
# Cell geometry
# Page 6
#
[cell]
mode = 1
    desc: The type of cell. Endo = 0, Epi = 1, M = 2
L = 0.01 [cm] : Cell length
    in [cm]
r = 0.0011 [cm] : Cell radius
    in [cm]
vcell = 1000 [uL/mL] * 3.14 * r * r * L
    in [uL]
    desc: Cell volume
Ageo = 2 * 3.14 * r * r + 2 * 3.14 * r * L
    in [cm^2]
    desc: Geometric cell area
Acap = 2 * Ageo
    in [cm^2]
    desc: Capacitative membrane area
AFC = Acap / phys.F * 1 [uF/cm^2]
    in [uF*mol/C]
vmyo = 0.68 * vcell
    in [uL]
    desc: Volume of the cytosolic compartment
vnsr = 0.0552 * vcell
    in [uL]
    desc: Volume of the NSR compartment
vjsr = 0.0048 * vcell
    in [uL]
    desc: Volume of the JSR compartment
vss = 0.02 * vcell
    in [uL]
    desc: Volume of the Submembrane space near the T-tubules

#
# Physical constants
# Page 2
#
[phys]
R = 8314 [J/kmol/K] : Gas constant
    in [J/kmol/K]
T = 310 [K] : Temperature
    in [K]
F = 96485 [C/mol] : Faraday constant
    in [C/mol]
RTF = R * T / F
    in [mV]
FRT = F / (R * T)
    in [1/mV]
FFRT = F * FRT
    in [C/mol/mV]

#
# Extracellular concentrations
# Page 5
#
[extra]
Na_o = 140 [mM] : Extracellular Na+ concentration
    in [mM]
Ca_o = 1.8 [mM] : Extracellular Ca2+ concentration
    in [mM]
K_o = 5.4 [mM] : Extracellular K+ concentration
    in [mM]

#
# Reversal potentials
# Page 6
#
[rev]
ENa = phys.RTF * log(extra.Na_o / sodium.Na_i)
    in [mV]
    desc: Reversal potential for Sodium currents
EK = phys.RTF * log(extra.K_o / potassium.K_i)
    in [mV]
    desc: Reversal potential for Potassium currents
PNaK = 0.01833
    desc: Permeability ratio K+ to Na+
EKs = phys.RTF * log((extra.K_o + PNaK * extra.Na_o) / (potassium.K_i + PNaK * sodium.Na_i))
    in [mV]
    desc: Reversal potential for IKs

#
# INa: Fast sodium current
# Page 6
#
# The fast sodium current is modelled using a Hodgkin-Huxley type formulation
# including activation (m), slow and fast components of inactivation (h) and
# recovery from inactivation (j). The slow component of inactivation and
# recovery from inactivation have an alternative formulation for CaMKII-
# phosphorylated channels.
#
[ina]
use membrane.V
# m-gates
sm = 1 / (1 + exp((V + 39.57 [mV]) / -9.871 [mV]))
    desc: Steady state value for m-gates
tm = 1 [ms] / (6.765 * exp((V + 11.64 [mV]) / 34.77 [mV]) + 8.552 * exp(-(V + 77.42 [mV]) / 5.955 [mV]))
    in [ms]
    desc: Time constant for m-gates
dot(m) = (sm - m) / tm
    desc: Activation gate for INa
# h-gates
sh = 1 / (1 + exp((V + 82.9 [mV]) / 6.086 [mV]))
    desc: Steady-state value for h-gates
thf = 1 [ms] / (1.432e-5 * exp((V + 1.196 [mV]) / -6.285 [mV]) + 6.149 * exp((V + 0.5096 [mV]) / 20.27 [mV]))
    in [ms]
    desc: Time constant for fast development of inactivation in INa
ths = 1 [ms] / (0.009794 * exp((V + 17.95 [mV]) / -28.05 [mV]) + 0.3343 * exp((V + 5.73 [mV]) / 56.66 [mV]))
    in [ms]
    desc: Time constant for slow development of inactivation in INa
Ahf = 0.99 : Fraction of INa channels with fast inactivation
Ahs = 1 - Ahf : Fraction of INa channels with slow inactivation
dot(hf) = (sh - hf) / thf
    desc: Fast component of inactivation for INa
dot(hs) = (sh - hs) / ths
    desc: Slow component of inactivation for non-phosphorylated INa
h = Ahf * hf + Ahs * hs
    desc: Inactivation gate for INa
# j-gates
sj = sh
    desc: Steady-state value for j-gate in INa
tj = 2.038 [ms] + 1 [ms] / (0.02136 * exp((V + 100.6 [mV]) / -8.281 [mV]) + 0.3052 * exp((V + 0.9941 [mV]) / 38.45 [mV]))
    in [ms]
    desc: Time constant for j-gate in INa
dot(j) = (sj - j) / tj
    desc: Recovery from inactivation gate for non-phosphorylated INa
# Phosphorylated channels
thsp = 3 * ths
    in [ms]
    desc: Time constant for h-gate of phosphorylated INa
shsp = 1 / (1 + exp((V + 89.1 [mV]) / 6.086 [mV]))
    desc: Steady-state value for h-gate of phosphorylated INa
dot(hsp) = (shsp - hsp) / thsp
    desc: Slow componennt of the inactivation gate for phosphorylated INa
hp = Ahf * hf + Ahs * hsp
    desc: Inactivation gate for phosphorylated INa
tjp = 1.46 * tj
    desc: Time constant for the j-gate of phosphorylated INa
    in [ms]
dot(jp) = (sj - jp) / tjp
    desc: Recovery from inactivation gate for phosphorylated INa
# Current
gNa = 75 [mS/uF] : Maximum conductance of INa
    in [mS/uF]
INa = gNa * (V - rev.ENa) * m^3 * ((1 - camk.f) * h * j + camk.f * hp * jp)
    in [A/F]
    desc: Fast sodium current

#
# INaL: Late component of the sodium current
# Page 7
#
[inal]
use membrane.V
use ina.tm
sm = 1 / (1 + exp((V + 42.85 [mV]) / -5.264 [mV]))
    desc: Steady state value of m-gate for INaL
dot(m) = (sm - m) / tm
    desc: Activation gate for INaL
th = 200 [ms] : Time constant for inactivation of non-phosphorylated INaL
    in [ms]
sh = 1 / (1 + exp((V + 87.61 [mV]) / 7.488 [mV]))
    desc: Steady-state value for inactivation of non-phosphorylated INaL
dot(h) = (sh - h) / th
    desc: Inactivation gate for non-phosphorylated INaL
thp = 3 * th
    in [ms]
    desc: Time constant for inactivation of phosphorylated INaL
shp = 1 / (1 + exp((V + 93.81 [mV]) / 7.488 [mV]))
    desc: Steady state value for inactivation of phosphorylated INaL
dot(hp) = (shp - hp) / thp
    desc: Inactivation gate for phosphorylated INaL
# Current
gNaL = 0.0075 [mS/uF] : Maximum conductance of INaL
    in [mS/uF]
fNaL = if(cell.mode == 1, 0.6, 1)
    desc: Adjustment for different cell types
INaL = fNaL * gNaL * (V - rev.ENa) * m * ((1 - camk.f) * h + camk.f * hp)
    in [A/F]

#
# Ito: Transient outward potassium current
# page 8
#
[ito]
use membrane.V
ta = 1.0515 [ms] / (one + two)
    in [ms]
    one = 1 / (1.2089 * (1 + exp((V - 18.4099 [mV]) / -29.3814 [mV])))
    two = 3.5 / (1 + exp((V + 100 [mV]) / 29.3814 [mV]))
    desc: Time constant for Ito activation
sa = 1 / (1 + exp((V - 14.34 [mV]) / -14.82 [mV]))
    desc: Steady-state value for Ito activation
dot(a) = (sa - a) / ta
    desc: Ito activation gate
si = 1 / (1 + exp((V + 43.94 [mV]) / 5.711 [mV]))
    desc: Steady-state value for Ito inactivation
delta_epi = if(cell.mode == 1,
    1 - 0.95 / (1 + exp((V + 70 [mV]) / 5 [mV])),
    1)
    desc: Adjustment for different cell types
tif = (4.562 [ms] + 1 [ms] / (0.3933 * exp((V + 100 [mV]) / -100 [mV]) + 0.08004 * exp((V + 50 [mV]) / 16.59 [mV]))) * delta_epi
    desc: Time constant for fast component of Ito inactivation
    in [ms]
tis = (23.62 [ms] + 1 [ms] / (0.001416 * exp((V + 96.52 [mV]) / -59.05 [mV]) + 1.78e-8 * exp((V + 114.1 [mV]) / 8.079 [mV]))) * delta_epi
    desc: Time constant for slow component of Ito inactivation
    in [ms]
dot(if) = (si - if) / tif
    desc: Fast component of Ito activation
dot(is) = (si - is) / tis
    desc: Slow component of Ito activation
Aif = 1 / (1 + exp((V - 213.6 [mV]) / 151.2 [mV]))
    desc: Fraction of fast inactivating Ito
Ais = 1 - Aif
    desc: Fraction of slow inactivating Ito
i = Aif * if + Ais * is
    desc: Inactivation gate for non-phosphorylated Ito
dot(ap) = (sap - ap) / ta
    sap = 1 / (1 + exp((V - 24.34 [mV]) / -14.82 [mV]))
dti_develop = 1.354 + 1e-4 / (exp((V - 167.4 [mV]) / 15.89 [mV]) + exp((V - 12.23 [mV]) / -0.2154 [mV]))
dti_recover = 1 - 0.5 / (1 + exp((V + 70 [mV]) / 20 [mV]))
tifp = dti_develop * dti_recover * tif
    desc: Time constant for fast component of inactivation of phosphorylated Ito
    in [ms]
tisp = dti_develop * dti_recover * tis
    desc: Time constant for slot component of inactivation of phosphorylated Ito
    in [ms]
dot(ifp) = (si - ifp) / tifp
    desc: Fast component of inactivation of phosphorylated Ito
dot(isp) = (si - isp) / tisp
    desc: Slow component of inactivation of phosphorylated Ito
ip = Aif * ifp + Ais * isp
    desc: Inactivation gate for phosphorylated Ito
# Current
gto = 0.02 [mS/uF]
    in [mS/uF]
    desc: Maximum conductance of Ito
fto = if(cell.mode == 0, 1, 4)
Ito = fto * gto * (V - rev.EK) * ((1 - camk.f) * a * i + camk.f * ap * ip)
    desc: Transient outward Potassium current
    in [A/F]

#
# ICaL: L-type calcium current
# ICaNa: Sodium current through the L-type calcium channel
# ICaK: Potassium current through the L-type calcium channel
# Page 9
#
# The ICaL channel is modeled using activation, inactivation (fast and slow),
# Ca-dependent inactivation (fast and slow) and recovery from Ca-dependent
# inactivation.
# Inactivation and Ca-dependent inactivation have an alternative formulation
# for CaMKII phosphorylated channels.
#
[ical]
use membrane.V
use extra.Ca_o, extra.K_o, extra.Na_o
use calcium.Ca_ss, potassium.K_ss, sodium.Na_ss
vf = V * phys.FRT
vff = V * phys.FFRT
    in [C/mol]
# Activation
sd = 1 / (1 + exp((V + 3.94 [mV]) / -4.23 [mV]))
    desc: Steady-state value for activation gate of ICaL
td = 0.6 [ms] + 1 [ms] / (exp(-0.05 [1/mV] * (V + 6 [mV])) + exp(0.09 [1/mV] * (V + 14 [mV])))
    desc: Time constant for activation gate of ICaL
    in [ms]
dot(d) = (sd - d) / td
    desc: Activation gate of ICaL channel
# Inactivation
sf = 1 / (1 + exp((V + 19.58 [mV]) / 3.696 [mV]))
    desc: Steady-state value for inactivation gate of ICaL
tff = 7 [ms] + 1 [ms] / (0.0045 * exp((V + 20 [mV]) / -10 [mV]) + 0.0045 * exp((V + 20 [mV]) / 10 [mV]))
    desc: Time constant for fast inactivation of ICaL
    in [ms]
tfs = 1000 [ms] + 1 [ms] / (3.5e-5 * exp((V + 5 [mV]) / -4 [mV]) + 3.5e-5 * exp((V + 5 [mV]) / 6 [mV]))
    desc: Time constant for fast inactivation of ICaL
    in [ms]
dot(ff) = (sf - ff) / tff
    desc: Fast inactivation of ICaL
dot(fs) = (sf - fs) / tfs
    desc: Slow inactivation of ICaL
Aff = 0.6 : Fraction of ICaL channels with fast inactivation
Afs = 1 - Aff : Fraction of ICaL channels with slow inactivation
f = Aff * ff + Afs * fs
    desc: Inactivation of ICaL
# Ca-dependent inactivation
sfca = sf
    desc: Steady-state value for Ca-dependent inactivation of ICaL
tfcaf = 7 [ms] + 1 [ms] / (0.04 * exp((V - 4 [mV]) / -7 [mV]) + 0.04 * exp((V - 4 [mV]) / 7 [mV]))
    desc: Time constant for fast Ca-dependent inactivation of ICaL
    in [ms]
tfcas = 100 [ms] + 1 [ms] / (0.00012 * exp(V / -3 [mV]) + 0.00012 * exp(V / 7 [mV]))
    desc: Time constant for slow Ca-dependent inactivation of ICaL
    in [ms]
dot(fcaf) = (sfca - fcaf) / tfcaf
    desc: Fast Ca-dependent inactivation of ICaL
dot(fcas) = (sfca - fcas) / tfcas
    desc: Slow Ca-dependent inactivation of ICaL
Afcaf = 0.3 + 0.6 / (1 + exp((V - 10 [mV]) / 10 [mV]))
    desc: Fraction of ICaL channels with fast Ca-dependent inactivation
Afcas = 1 - Afcaf
    desc: Fraction of ICaL channels with slow Ca-dependent inactivation
fca = Afcaf * fcaf + Afcas * fcas
    desc: Ca-dependent inactivation of ICaL
# Recovery from Ca-dependent inactivation
tjca = 75 [ms] : Time constant of recovery from Ca-dependent inactivation
    in [ms]
dot(jca) = (sfca - jca) / tjca
    desc: Recovery from Ca-dependent inactivation
# Inactivation of phosphorylated ICaL
tffp = 2.5 * tff
    in [ms]
    desc: Time constant for fast inactivation of phosphorylated ICaL
dot(ffp) = (sf - ffp) / tffp
    desc: Fast inactivation of phosphorylated ICaL
fp = Aff * ffp + Afs * fs
    desc: Inactivation of phosphorylated ICaL
# Ca-dependent inactivation of phosphorylated ICaL
tfcafp = 2.5 * tfcaf
    in [ms]
    desc: Time constant for fast Ca-dependent inactivation of phosphorylated ICaL
dot(fcafp) = (sfca - fcafp) / tfcafp
    desc: Fast Ca-dependent inactivation of phosphorylated ICaL
fcap = Afcaf * fcafp + Afcas * fcas
    desc: Ca-dependent inactivation of phosphorylated ICaL
# Fraction of channels in Ca-dependent inactivation mode
dot(nca) = anca * k2n - nca * km2n
    desc: Fraction of channels in Ca-depdent inactivation mode
    Kmn = 0.002 [mM]
        in [mM]
    k2n = 1000 [1/ms]
        in [1/ms]
    km2n = jca * 1 [1/ms]
        in [1/ms]
    anca = 1 / (k2n / km2n + (1 + Kmn / Ca_ss)^4)
# Total currents through L-type calcium channels
PhiCaL = if(vf == 0, 1 [C/mol] * 4 * (Ca_ss - 0.341 * Ca_o), 4 * vff * (Ca_ss * exp(2 * vf) - 0.341 * Ca_o) / (exp(2 * vf) - 1))
    in [mC/L]
PhiCaNa = if(vf == 0, 1 [C/mol] * 1 * (0.75 * Na_ss - 0.75 * Na_o),  1 * vff * (0.75 * Na_ss * exp(1 * vf) - 0.75 * Na_o) / (exp(1 * vf) - 1))
    in [mC/L]
PhiCaK = if(vf == 0, 1 [C/mol] * 1 * (0.75 * K_ss - 0.75 * K_o), 1 * vff * (0.75 * K_ss * exp(1 * vf) - 0.75 * K_o) / (exp(1 * vf) - 1))
    in [mC/L]
PCa_base = 0.0001 [L/ms/F]
    in [L/ms/F]
    label gCaL
PCa = PCa_base * piecewise(cell.mode == 0, 1, cell.mode == 1, 1.2, 2.5)
    in [L/ms/F]
PCap = 1.1 * PCa
    in [L/ms/F]
PCaNa = 0.00125 * PCa
    in [L/ms/F]
PCaK = 3.574e-4 * PCa
    in [L/ms/F]
PCaNap = 0.00125 * PCap
    in [L/ms/F]
PCaKp = 3.574e-4 * PCap
    in [L/ms/F]
g = d * (f  * (1 - nca) + jca * fca  * nca)
    desc: Conductivity of non-phosphorylated ICaL
gp = d * (fp * (1 - nca) + jca * fcap * nca)
    desc: Conductivity of phosphorylated ICaL
ICaL = (1 - camk.f) * PCa * PhiCaL * g + camk.f * PCap * PhiCaL * gp
    in [A/F]
    desc: Ca-component of L-type calcium current
ICaNa = (1 - camk.f) * PCaNa * PhiCaNa * g + camk.f * PCaNap * PhiCaNa * gp
    in [A/F]
    desc: Na-component of L-type calcium current
ICaK = (1 - camk.f) * PCaK * PhiCaK * g + camk.f * PCaKp * PhiCaK * gp
    in [A/F]
    desc: K-component of L-type calcium current
ICaL_total = ICaL + ICaK + ICaNa
    in [A/F]
    label ICaL

#
# IKr: Rapid delayed rectifier potassium current
# Page 11
#
# Modelled with activation (fast and slow) and an instantaneous inactivation.
#
[ikr]
use membrane.V
# Activation
sx = 1 / (1 + exp((V + 8.337 [mV]) / -6.789 [mV]))
    desc: Steady-state value for IKr activation
txf = 12.98 [ms] + 1 [ms] / (0.36520 * exp((V - 31.66 [mV]) / 3.869 [mV]) + 4.123e-5 * exp((V - 47.78 [mV]) / -20.38 [mV]))
    desc: Time constant for fast IKr activation
    in [ms]
txs = 1.865 [ms] + 1 [ms] / (0.06629 * exp((V - 34.70 [mV]) / 7.355 [mV]) + 1.128e-5 * exp((V - 29.74 [mV]) / -25.94 [mV]))
    desc: Time constant for slow IKr activation
    in [ms]
dot(xf) = (sx - xf) / txf
    desc: Fast activation of IKr
dot(xs) = (sx - xs) / txs
    desc: Slow activation of IKr
Axf = 1 / (1 + exp((V + 54.81 [mV]) / 38.21 [mV]))
    desc: Fraction of IKr channels with fast activation
Axs = 1 - Axf
    desc: Fraction of IKr channels with slow activation
x = Axf * xf + Axs * xs
    desc: Activation of IKr
# Inactivation
r = 1 / (1 + exp((V + 55 [mV]) / 75 [mV])) * 1 / (1 + exp((V - 10 [mV]) / 30 [mV]))
    desc: Inactivation of IKr
# Current
fKr = piecewise(cell.mode == 0, 1, cell.mode == 1, 1.3, 0.8)
gKr = 0.046 [mS/uF]
    in [mS/uF]
    desc: Maximum conductance of IKr
IKr = fKr * gKr * sqrt(extra.K_o / 5.4 [mM]) * x * r * (V - rev.EK)
    desc: Rapid delayed Potassium current
    in [A/F]

#
# IKs: Slow delayed rectifier potassium current
# Page 11
#
# Modelled with two activation gates
#
[iks]
use membrane.V
sx = 1 / (1 + exp((V + 11.6 [mV]) / -8.932 [mV]))
    desc: Steady-state value for activation of IKs
dot(x1) = (sx - x1) / tau
    desc: Slow, low voltage IKs activation
    tau = 817.3 [ms] + 1 [ms] / (2.326e-4 * exp((V + 48.28 [mV]) / 17.8 [mV]) + 0.001292 * exp((V + 210 [mV]) / -230 [mV]))
        desc: Time constant for slow, low voltage IKs activation
        in [ms]
dot(x2) = (sx - x2) / tau
    desc: Fast, high voltage IKs activation
    tau = 1 [ms] / (0.01 * exp((V - 50 [mV]) / 20 [mV]) + 0.0193 * exp((V + 66.54 [mV]) / -31 [mV]))
        desc: Time constant for fast, high voltage IKs activation
        in [ms]
KsCa = 1 + 0.6 / (1 + (3.8e-5 [mM] / calcium.Ca_i)^1.4)
fKs = if(cell.mode == 1, 1.4, 1)
gKs = 0.0034 [mS/uF]
    in [mS/uF]
IKs = fKs * gKs * KsCa * x1 * x2 * (V - rev.EKs)
    desc: Slow delayed rectifier Potassium current
    in [A/F]

#
# IK1: Inward rectifier potassium current
# Page 12
#
# Modelled with an activation channel and an instantaneous inactivation channel
#
[ik1]
use membrane.V
use extra.K_o
dot(x) = (inf - x) / tau
    desc: Time-dependent inactivation at hyperpolarised (low) potentials
    inf = 1 / (1 + exp(-(V + 2.5538 [mV/mM] * K_o + 144.59 [mV]) / (1.5692 [mV/mM] * K_o + 3.8115 [mV])))
    tau = 122.2 [ms] / (exp((V + 127.2 [mV]) / -20.36 [mV]) + exp((V + 236.8 [mV]) / 69.33 [mV]))
        in [ms]
r = 1 / (1 + exp((V + 105.8 [mV] - 2.6 [mV/mM] * K_o) / 9.493 [mV]))
    desc: Instantaneous rectification
fK1 = piecewise(cell.mode == 0, 1, cell.mode == 1, 1.2, 1.3)
gK1 = 0.1908 [mS/uF]
    in [mS/uF]
    desc: Maximum conductance for IK1 (before cell-type scaling)
IK1 = fK1 * gK1 * sqrt(K_o / 1 [mM]) * r * x * (V - rev.EK)
    in [A/F]
    desc: Inward rectifier Potassium current

#
# INaCa: Sodium/calcium exchange current
# page 12
#
[inaca]
use membrane.V
use extra.Na_o, extra.Ca_o
use sodium.Na_i, calcium.Ca_i
kna1 = 15 [mM]
    in [mM]
kna2 = 5 [mM]
    in [mM]
kna3 = 88.12 [mM]
    in [mM]
kasymm = 12.5
wna = 6e4 [Hz]
    in [Hz]
wca = 6e4 [Hz]
    in [Hz]
wnaca = 5e3 [Hz]
    in [Hz]
kcaon = 1.5e6 [mM/ms]
    in [mM/ms]
kcaoff = 5e3 [mM/ms]
    in [mM/ms]
qna = 0.5224
qca = 0.167
hca = exp(qca * V * phys.FRT)
hna = exp(qna * V * phys.FRT)
# Parameters h
h1 = 1 + Na_i / kna3 * (1 + hna)
h2 = Na_i * hna / (kna3 * h1)
h3 = 1 / h1
h4 = 1 + Na_i / kna1 * (1 + Na_i / kna2)
h5 = Na_i * Na_i / (h4 * kna1 * kna2)
h6 = 1 / h4
h7 = 1 + Na_o / kna3 * (1 + 1 / hna)
h8 = Na_o / (kna3 * hna * h7)
h9 = 1 / h7
h10 = kasymm + 1 + Na_o / kna1 * (1 + Na_o / kna2)
h11 = Na_o * Na_o / (h10 * kna1 * kna2)
h12 = 1 / h10
# Parameters k
k1 = h12 * Ca_o * kcaon * 1 [1/M/mM]
    in [Hz]
k2 = kcaoff * 1 [1/M]
    in [Hz]
k3p = h9 * wca
    in [Hz]
k3pp = h8 * wnaca
    in [Hz]
k3 = k3p + k3pp
    in [Hz]
k4p = h3 * wca / hca
    in [Hz]
k4pp = h2 * wnaca
    in [Hz]
k4 = k4p + k4pp
    in [Hz]
k5 = kcaoff * 1 [1/M]
    in [Hz]
k6 = h6 * Ca_i * kcaon * 1 [1/M/mM]
    in [Hz]
k7 = h5 * h2 * wna
    in [Hz]
k8 = h8 * h11 * wna
    in [Hz]
x1 = k2 * k4 * (k7 + k6) + k5 * k7 * (k2 + k3)
    in [Hz^3]
x2 = k1 * k7 * (k4 + k5) + k4 * k6 * (k1 + k8)
    in [Hz^3]
x3 = k1 * k3 * (k7 + k6) + k8 * k6 * (k2 + k3)
    in [Hz^3]
x4 = k2 * k8 * (k4 + k5) + k3 * k5 * (k1 + k8)
    in [Hz^3]
E1 = x1 / (x1 + x2 + x3 + x4)
E2 = x2 / (x1 + x2 + x3 + x4)
E3 = x3 / (x1 + x2 + x3 + x4)
E4 = x4 / (x1 + x2 + x3 + x4)
KmCaAct = 150e-6 [mM]
    in [mM]
allo = 1 / (1 + (KmCaAct / Ca_i)^2)
JncxNa = 3 * (E4 * k7 - E1 * k8) + E3 * k4pp - E2 * k3pp
    in [1/s]
JncxCa = E2 * k2 - E1 * k1
    in [1/s]
fNaCa = piecewise(cell.mode == 0, 1, cell.mode == 1, 1.1, 1.4)
gNaCa = 0.0008 [C/F]
    in [C/F]
INaCa = 0.8 * fNaCa * gNaCa * allo * (JncxNa + 2 * JncxCa)
    in [A/F]
    desc: Sodium/Calcium exchange current

#
# INaCa_ss: Sodium/calcium exchanger current into the L-type subspace
# Page 12
#
[inacass]
use membrane.V
use extra.Na_o, extra.Ca_o
use sodium.Na_ss, calcium.Ca_ss
use inaca.kna1, inaca.kna2, inaca.kna3, inaca.hna
# Parameters h
h1 = 1 + Na_ss / kna3 * (1 + hna)
h2 = Na_ss * hna / (kna3 * h1)
h3 = 1 / h1
h4 = 1 + Na_ss / kna1 * (1 + Na_ss / kna2)
h5 = Na_ss * Na_ss / (h4 * kna1 * kna2)
h6 = 1 / h4
h7 = 1 + Na_o / kna3 * (1 + 1 / hna)
h8 = Na_o / (kna3 * hna * h7)
h9 = 1 / h7
h10 = inaca.kasymm + 1 + Na_o / kna1 * (1 + Na_o / kna2)
h11 = Na_o * Na_o / (h10 * kna1 * kna2)
h12 = 1 / h10
# Parameters K
k1 = h12 * Ca_o * inaca.kcaon * 1 [1/M/mM]
    in [Hz]
k2 = inaca.kcaoff * 1 [1/M]
    in [Hz]
k3p = h9 * inaca.wca
    in [Hz]
k3pp = h8 * inaca.wnaca
    in [Hz]
k3 = k3p + k3pp
    in [Hz]
k4p = h3 * inaca.wca / inaca.hca
    in [Hz]
k4pp = h2 * inaca.wnaca
    in [Hz]
k4 = k4p + k4pp
    in [Hz]
k5 = inaca.kcaoff * 1 [1/M]
    in [Hz]
k6 = h6 * Ca_ss * inaca.kcaon * 1 [1/M/mM]
    in [Hz]
k7 = h5 * h2 * inaca.wna
    in [Hz]
k8 = h8 * h11 * inaca.wna
    in [Hz]
x1 = k2 * k4 * (k7 + k6) + k5 * k7 * (k2 + k3)
    in [Hz^3]
x2 = k1 * k7 * (k4 + k5) + k4 * k6 * (k1 + k8)
    in [Hz^3]
x3 = k1 * k3 * (k7 + k6) + k8 * k6 * (k2 + k3)
    in [Hz^3]
x4 = k2 * k8 * (k4 + k5) + k3 * k5 * (k1 + k8)
    in [Hz^3]
E1 = x1 / (x1 + x2 + x3 + x4)
E2 = x2 / (x1 + x2 + x3 + x4)
E3 = x3 / (x1 + x2 + x3 + x4)
E4 = x4 / (x1 + x2 + x3 + x4)
allo = 1 / (1 + (inaca.KmCaAct / Ca_ss)^2)
JncxNa = 3 * (E4 * k7 - E1 * k8) + E3 * k4pp - E2 * k3pp
    in [1/s]
JncxCa = E2 * k2 - E1 * k1
    in [1/s]
INaCa_ss = 0.2 * inaca.fNaCa * inaca.gNaCa * allo * (JncxNa + 2 * JncxCa)
    in [A/F]
    desc: Sodium/Calcium exchange current into the T-Tubule subspace

#
# INaK: Sodium/potassium ATPase current
# Based on Smith & Crampin 2004 https://doi.org/10.1016/j.pbiomolbio.2004.01.010
# The formulation below was corrected from the O'Hara implementation, see
# https://docs.google.com/document/d/111fqNzQGvGAjB_PrkvejEhzqwROrR6czz_OBz7Ep-iM
#
# Supplement page 14
#
[inak]
use membrane.V
use extra.Na_o, sodium.Na_i, sodium.Na_ss
use extra.K_o, potassium.K_i, potassium.K_ss
MgATP = 9.8 [mM]    # Original
    in [mM]
    desc: Intracellular MgATP concentration
MgADP = 0.05 [mM]   # Original
    in [mM] 
    desc: Intracellular MgADP concentration
eP = 4.2 [mM]       # Original
    in [mM]
    desc: The total concentration of inorganic phosphate (free + bound)
H = 1e-4 [mM]       # Corrected (see below)
    in [mM]
    desc: Intracellular H+
    note: Corrected to 1e-7 [M] (pH 7) from original value of 1e-7 [mM]
Khp = 1.698e-7 [mM] # This value is suspicious! Smith and crampin paper says 6.77. Cellml says 1.69e-4
    in [mM]
    desc: Dissociation constant relating [HPi] and [H]
Kxkur = 292 [mM]    # Original    
    in [mM]
    desc: Dissociation constant relating [KPi] and [K]i
Knap = 224 [mM]     # Original
    in [mM]
    desc: Dissociation constant relating [NaPi] and [Na]i
# Table 1 parameters in Smith & Cramin
k1p = 949.5 [1/s]       # Refit from 1050
    in [1/s]
k1m = 182.4 [1/s/mM]    # Refit from 172.1
    in [1/s/mM]
k2p = 687.2 [1/s]       # Refit from 481
    in [1/s]
k2m = 39.4 [1/s]        # Refit from 40
    in [1/s]
k3p = 1899 [1/s]        # Refit from 2000
    in [1/s]
k3m = 79300 [1/s/mM^2]  # Original
    in [1/s/mM^2]
k4p = 639 [1/s]         # Refit from 320
    in [1/s]
k4m = 40 [1/s]          # Original
    in [1/s]
Knao0 = 27.78 [mM]      # Refit from 15.5
    in [mM]
    desc: Extracellular Na+ dissociation constant at 0mV
Knai0 = 9.073 [mM]      # Refit from 2.49
    in [mM]
    desc: Intracellular Na+ dissociation constant at 0mV
Kko = 0.3582 [mM]       # Refit from 0.213
    in [mM]
    desc: Extracellular K+ dissociation constant
Kki = 0.5 [mM]          # Original
    in [mM]
    desc: Intracellular K+ dissociation constant
Kmgatp = 1.698e-7 [mM]  # Refit from 2.51
    in [mM]
    desc: Intracellular MgATP dissociation constant
delta = -0.155          # Refit from -0.031
    desc: """A constant that "determines how the voltage dependence is
             partitioned between intra and extracellular Na+ dissociation 
             reactions."""
# Equations 14: Voltage-dependent Na+ dissociation constants
Knai = Knai0 * exp(delta * V * phys.FRT / 3)
    in [mM]
Knao = Knao0 * exp((1 - delta) * V * phys.FRT / 3)
    in [mM]
# Equations 30: Forward (clockwise) rates
a1 = k1p * (Na_i / Knai)^3 / ((1 + Na_i / Knai)^3 + (1 + K_i / Kki)^2 - 1)
    in [Hz]
a2 = k2p
    in [Hz]
a3 = k3p * (K_o / Kko)^2 / ((1 + Na_o / Knao)^3 + (1 + K_o / Kko)^2 - 1)
    in [Hz]
a4 = k4p * MgATP / Kmgatp / (1 + MgATP / Kmgatp)
    in [Hz]
# Equations 31: Backward (anticlockwise) rates
b1 = k1m * MgADP
    in [Hz]
b2 = k2m * (Na_o / Knao)^3 / ((1 + Na_o / Knao)^3 + (1 + K_o / Kko)^2 - 1)
    in [Hz]
b3 = k3m * P * H / (1 + MgATP / Kmgatp)
    in [Hz]
b4 = k4m * (K_i / Kki)^2 / ((1 + Na_i / Knai)^3 + (1 + K_i / Kki)^2 - 1)
    in [Hz]
# Equation 33
P = eP / (1 + H / Khp + Na_i / Knap + K_i / Kxkur)
    in [mM]
# Terms used to calculate the steady-state occupancies of the four states
# Based on the "diagram method" described in [2], these terms are the sums of
# the reaction rates of all (non-cyclical) paths leading to each state
x1 = a4 * a1 * a2 + b1 * b4 * b3 + a2 * b4 * b3 + b3 * a1 * a2
    in [Hz^3]
    note: Corrected from the original code (b1 in second term)
x2 = b2 * b1 * b4 + a1 * a2 * a3 + a3 * b1 * b4 + a2 * a3 * b4
    in [Hz^3]
x3 = a2 * a3 * a4 + b3 * b2 * b1 + b2 * b1 * a4 + a3 * a4 * b1
    in [Hz^3]
x4 = b4 * b3 * b2 + a3 * a4 * a1 + b2 * a4 * a1 + b3 * b2 * a1
    in [Hz^3]
# Cycle rate (obtaining by writing any one of the four flux equations: they all
# give the same result so that the pump count is conserved).
r = (a1 * a2 * a3 * a4 - b1 * b2 * b3 * b4) / (x1 + x2 + x3 + x4)
    in [1/s]
# INaK current
JnakNa = 3 * r
    in [1/s]
JnakK = -2 * r
    in [1/s]    
fNaK = piecewise(cell.mode == 0, 1, cell.mode == 1, 0.9, 0.7)
PNaK = 30 [C/F]
    in [C/F]
INaK = fNaK * PNaK * (JnakNa + JnakK)
    in [A/F]
    desc: Sodium/Potassium ATPase current

#
# IKb: Background potassium current
# Page 15
#
[ikb]
use membrane.V
xkb = 1 / (1 + exp((V - 14.48 [mV]) / -18.34 [mV]))
fKb = if(cell.mode == 1, 0.6, 1)
gKb = 0.003 [mS/uF]
    in [mS/uF]
IKb = fKb * gKb * xkb * (V - rev.EK)
    in [A/F]
    desc: Background Potassium current

#
# INab: Background sodium current
# Page 15
#
[inab]
use membrane.V
PNab = 3.75e-10 [L/ms/F]
    in [L/ms/F]
INab = PNab * V * phys.FFRT * (sodium.Na_i * evf - extra.Na_o) / (evf - 1)
    in [A/F]
    evf = exp(V * phys.FRT)
    desc: Background Sodium current

#
# ICab: Background calcium current
# Page 15
#
[icab]
use membrane.V
PCab = 2.5e-8 [L/ms/F]
    in [L/ms/F]
ICab = PCab * 4 * V * phys.FFRT * (calcium.Ca_i * evf2 - 0.341 * extra.Ca_o) / (evf2 - 1)
    in [A/F]
    evf2 = exp(2 * V * phys.FRT)
    desc: Background Calcium current

#
# IpCa: Sarcolemmal calcium pump current
# Page 15
#
[ipca]
GpCa = 0.0005 [A/F]
    in [A/F]
IpCa = GpCa * calcium.Ca_i / (0.0005 [mM] + calcium.Ca_i)
    desc: Sarcolemmal Calcium pump current
    in [A/F]

#
# Jrel: SR Calcium release flux via ryanodine receptor
# Page 17
#
[ryr]
use calcium.Ca_jsr
bt = 4.75 [ms]
    in [ms]
a_rel = 0.5 * bt
    in [ms]
dot(Jrelnp) = (inf - Jrelnp) / tau
    in [mM/ms]
    tau = if(value < 0.001 [ms], 0.001 [ms], value)
        in [ms]
        value = bt / (1 + 0.0123 [mM] / Ca_jsr)
            in [ms]
    inf = base * if(cell.mode == 2, 1.7, 1)
        in [mM/ms]
        base = -1 [mM/ms/mV] * a_rel * ical.ICaL / (1 + (1.5 [mM] / Ca_jsr)^8)
            in [mM/ms]
btp = 1.25 * bt
    in [ms]
a_relp = 0.5 * btp
    in [ms]
dot(Jrelp) = (inf - Jrelp) / tau
    in [mM/ms]
    tau = if(value < 0.001 [ms], 0.001 [ms], value)
        in [ms]
        value = btp / (1 + 0.0123 [mM] / Ca_jsr)
            in [ms]
    inf = base * if(cell.mode == 2, 1.7, 1)
        in [mM/ms]
        base = -1 [mM/ms/mV] * a_relp * ical.ICaL / (1 + (1.5 [mM] / Ca_jsr)^8)
            in [mM/ms]
Jrel = (1 - camk.f) * Jrelnp + camk.f * Jrelp
    desc: SR Calcium release flux via Ryanodine receptor
    in [mM/ms]

#
# Jup: Calcium uptake via SERCA pump
# Page 17
#
[serca]
use calcium.Ca_i, calcium.Ca_jsr, calcium.Ca_nsr
f = if(cell.mode == 1, 1.3, 1)
Jupnp = f * 0.004375 [mM/ms] * Ca_i / (Ca_i + 0.00092 [mM])
    in [mM/ms]
Jupp = f * 2.75 * 0.004375 [mM/ms] * Ca_i / (Ca_i + 0.00092 [mM] - 0.00017 [mM])
    in [mM/ms]
Jleak = 0.0039375 [mM/ms] * Ca_nsr / 15 [mM]
    in [mM/ms]
Jup = (1 - camk.f) * Jupnp + camk.f * Jupp - Jleak
    desc: Total Ca2+ uptake, via SERCA pump, from myoplasm to nsr
    in [mM/ms]
Jtr = (Ca_nsr - Ca_jsr) / 100 [ms]
    desc: Ca2+ translocation from nsr to jsr
    in [mM/ms]

#
# Diffusion fluxes
# Page 16
#
[diff]
JdiffNa = (sodium.Na_ss - sodium.Na_i) / 2 [ms]
    in [mM/ms]
JdiffK = (potassium.K_ss - potassium.K_i) / 2 [ms]
    in [mM/ms]
Jdiff = (calcium.Ca_ss - calcium.Ca_i) / 0.2 [ms]
    in [mM/ms]

#
# Intracellular sodium concentrations
# Page 18
#
[sodium]
use cell.AFC, cell.vss, cell.vmyo
INa_tot = ina.INa + inal.INaL + inab.INab + 3 * inaca.INaCa + 3 * inak.INaK
    in [A/F]
dot(Na_i) = -INa_tot * AFC / vmyo + diff.JdiffNa * vss / vmyo
    desc: Intracellular Potassium concentration
    in [mM]
INa_ss_tot = ical.ICaNa + 3 * inacass.INaCa_ss
    in [A/F]
dot(Na_ss) = -INa_ss_tot * AFC / vss - diff.JdiffNa
    in [mM]

#
# Intracellular potassium concentrations
# Page 18
#
[potassium]
use cell.AFC, cell.vss, cell.vmyo
IK_tot = (
    + ito.Ito
    + ikr.IKr
    + iks.IKs
    + ik1.IK1
    + ikb.IKb
    - 2 * inak.INaK
)
    in [A/F]
IK_ss_tot = ical.ICaK
    in [A/F]
dot(K_i) = -(IK_tot + stimulus.i_stim) * AFC / vmyo + diff.JdiffK * vss / vmyo
    desc: Intracellular Potassium concentration
    in [mM]
dot(K_ss) = -IK_ss_tot * AFC / vss - diff.JdiffK
    desc: Potassium concentration in the T-Tubule subspace
    in [mM]

#
# Intracellular calcium concentrations and buffers
# Page 18
#
[calcium]
use cell.AFC, cell.vmyo, cell.vnsr, cell.vjsr, cell.vss
cmdnmax = base * if(cell.mode == 1, 1.3, 1)
    in [mM]
    base = 0.05 [mM]
        in [mM]
trpnmax = 0.07 [mM]
    in [mM]
BSRmax = 0.047 [mM]
    in [mM]
BSLmax = 1.124 [mM]
    in [mM]
csqnmax = 10 [mM]
    in [mM]
kmcmdn = 0.00238 [mM]
    in [mM]
kmtrpn = 0.0005 [mM]
    in [mM]
KmBSR = 0.00087 [mM]
    in [mM]
KmBSL = 0.0087 [mM]
    in [mM]
kmcsqn = 0.8 [mM]
    in [mM]
ICa_tot = ipca.IpCa + icab.ICab - 2 * inaca.INaCa
    in [A/F]
dot(Ca_i) = buff * (-ICa_tot * AFC / (2 * vmyo) - serca.Jup * vnsr / vmyo + diff.Jdiff * vss / vmyo)
    in [mM]
    desc: Intracellular calcium concentration
    buff = 1 / (1 + cmdnmax * kmcmdn / (kmcmdn + Ca_i)^2 + trpnmax * kmtrpn / (kmtrpn + Ca_i)^2)
ICa_ss_tot = ical.ICaL - 2 * inacass.INaCa_ss
    in [A/F]
dot(Ca_ss) = buff * (-ICa_ss_tot * AFC / (2 * vss) + ryr.Jrel * vjsr / vss - diff.Jdiff)
    in [mM]
    desc: Calcium concentration in the T-Tubule subspace
    buff = 1 / (1 + BSRmax * KmBSR / (KmBSR + Ca_ss)^2 + BSLmax * KmBSL / (KmBSL + Ca_ss)^2)
dot(Ca_jsr) = buff * (serca.Jtr - ryr.Jrel)
    in [mM]
    desc: Calcium concentration in the JSR subspace
    buff = 1 / (1 + csqnmax * kmcsqn / (kmcsqn + Ca_jsr)^2)
dot(Ca_nsr) = serca.Jup - serca.Jtr * vjsr / vnsr
    in [mM]
    desc: Calcium concentration in the NSR subspace

#
# Active CaMKII subunits.
# Equations given on page 16 of the supplement to [1].
# Described in more detail in Hund et al. 2004 [2].
#
[camk]
aCaMK = 0.05 [1/ms]
    in [1/ms]
bCaMK = 0.00068 [1/ms]
    in [1/ms]
CaMKo = 0.05
KmCaM = 0.0015 [mM]
    in [mM]
KmCaMK = 0.15
CaMK_bound = CaMKo * (1 - CaMK_trapped) / (1 + KmCaM / calcium.Ca_ss)
    desc: Fraction of calmodulin-bound (and therefore) active subunits
dot(CaMK_trapped) = aCaMK * CaMK_bound * CaMK_active - bCaMK * CaMK_trapped
    desc: Fraction of subunits "trapped" in an active state
CaMK_active = CaMK_bound + CaMK_trapped
    desc: Total fraction of active subunits
f = 1 / (1 + KmCaMK / CaMK_active)
    desc: Fraction of phosphorylated subunits

[[protocol]]
# Level  Start    Length   Period   Multiplier
1        10       0.5      1000     0

[[script]]
import matplotlib.pyplot as plt
import myokit

# Get the model and protocol, create a simulation
m = get_model()
p = get_protocol()
s = myokit.Simulation(m, p)

# Create an empty figure
plt.figure()
plt.xlabel('Time (ms)')
plt.ylabel('Membrane potential (mV)')

# Select variables for logging
variables = [
    'engine.time',
    'membrane.V',
]

# Run a simulation in every mode
modes = {
    'Endocardial' : 0,
    'Epicardial' : 1,
    'Mid-myocardial' : 2,
}
for name, mode in modes.items():

    # Change mode in simulation
    s.set_constant('cell.mode', mode)

    # Pre-pace for a few beats
    s.pre(50 * 1000)

    # Run a logged simulation
    d = s.run(500, log=variables)

    # Display the simulated membrane potential
    plt.plot(d['engine.time'], d['membrane.V'], label=name)

    # Reset the simulation
    s.reset()

plt.legend(loc='upper right')
plt.show()

