[[model]]
name: logistic
version: 20240904
mmt_authors: Michael Clerx
display_name: Logistic growth model
desc: """
    Logistic growth model, see e.g. [1].

    [1] https://en.wikipedia.org/wiki/Population_dynamics
        Accessed on 2023-02-02
    """
# Initial values
population.size = 2

[engine]
time = 0 bind time

[population]
dot(size) = r * size * (1 - size / k)
r = 0.015
k = 500

[[script]]
import matplotlib.pyplot as plt
import myokit

# Get model and protocol, create simulation
m = get_model()
s = myokit.Simulation(m)

# Run simulation
d = s.run(1000)

# Display the results
plt.figure()
plt.xlabel('Time')
plt.ylabel('Population size')
plt.plot(d.time(), d['population.size'])
plt.show()

